<?xml version="1.0" encoding="utf-8"?>

<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Draft" Originator="dx.idot.sila"
         Category="dispensing"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">

	<Identifier>BarcodeReaderService</Identifier>
	<DisplayName>Barcode Reader Service</DisplayName>
	<Description>Service to read a barcode from a SBS format plate that has been placed in either the source tray or the target tray.

		Reading barcodes with this feature is possible only if the I.DOT is equipped with a barcode reader. This can be checked via the property Barcode Reader Availability.
		To sucessfully read a barcode, it must be positioned correctly on the plate, and the plate must be oriented in the tray so that the barcode is facing the barcode reader.
	</Description>
	<Command>
		<Identifier>ReadBarcodeOnPlate</Identifier>
		<DisplayName>Read Barcode On Plate</DisplayName>
		<Description>Read the source or target plate barcode. To use this feature, make sure the I.DOT instrument has the barcode reader component installed.</Description>
		<Observable>Yes</Observable>
		<Parameter>
			<Identifier>PlateTray</Identifier>
			<DisplayName>Plate Tray</DisplayName>
			<Description>Tray in which the plate to be read is located, either "Target" or "Source".</Description>
			<DataType>
				<Constrained>
					<DataType>
						<Basic>String</Basic>
					</DataType>
					<Constraints>
						<Set>
							<Value>BarcodeTarget</Value>
							<Value>BarcodeSource</Value>
						</Set>
					</Constraints>
				</Constrained>
			</DataType>
		</Parameter>
		<Response>
			<Identifier>Barcode</Identifier>
			<DisplayName>Barcode</DisplayName>
			<Description>Barcode read by the barcode reader.</Description>
			<DataType>
				<Basic>String</Basic>
			</DataType>
		</Response>
	</Command>
	<Property>
		<Identifier>BarcodeReaderAvailability</Identifier>
		<DisplayName>Barcode Reader Availability</DisplayName>
		<Description>Query whether the barcode reader is available or not. This property reflects the state of the "UseBarcodeReader" property in the I.DOT Assay Studio configuration file. This property can be changed in the general settings of I.DOT Assay Studio and requires the barcode reader component to be installed in the device to be set to TRUE.</Description>
		<Observable>No</Observable>
		<DataType>
			<Basic>Boolean</Basic>
		</DataType>
	</Property>

</Feature>