<?xml version="1.0" encoding="utf-8"?>

<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Draft" Originator="dx.idot.sila"
         Category="dispensing"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">

	<Identifier>InitializationController</Identifier>
	<DisplayName>Initialization Controller</DisplayName>
	<Description>Controller to reset and initialize the I.DOT. Upon startup of the device, the I.DOT needs to be reset and then initialized. This procedure can also be used to recover from an error state that is not solvable otherwise.</Description>
	<Command>
		<Identifier>Reset</Identifier>
		<DisplayName>Reset</DisplayName>
		<Description>Reset the I.DOT. Sending this command is required right after the connection to the SiLA 2 Server is established. Through the flag SimulationMode the device software can either connect to and control the hardware (SimulationMode=False, called "DeviceMode" in the UI) or simulate the hardware (SimulationMode=True, called "DesktopMode" in the UI). We do not recomment to reset the device durring the execution of another command. </Description>
		<Observable>Yes</Observable>
		<Parameter>
			<Identifier>SimulationMode</Identifier>
			<DisplayName>simulation Mode</DisplayName>
			<Description>State of the I.DOT. True means running I.DOT in simulation mode and false means running the I.DOT with hardware connectivity</Description>
			<DataType>
				<Basic>Boolean</Basic>
			</DataType>
		</Parameter>
	</Command>
	<Command>
		<Identifier>Initialize</Identifier>
		<DisplayName>Initialize</DisplayName>
		<Description>initialize I.DOT instrument.</Description>
		<Observable>Yes</Observable>
	</Command>
</Feature>